PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = AO_human_v_robot_pilot
  keyboardBackend = ioHub
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Routines
  Routine stimLoader
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    CodeComponent codeLoader
      Code Type = Py
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      Begin Experiment:
        condition_list = [];
        action_list = [];
        stim_dir_list=[];
        side_list = [];
        N_rep = 4
      Begin Routine:
        action_list.append(mappedActions);
        condition_list.append(conditions);
        stim_dir_list.append(stimDir);
        side_list.append(side)
  Routine stimShuffler
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    CodeComponent codeShuffler
      Code Type = Py
      Begin Experiment:
        from numpy.random import choice
        import csv
        import datetime

        counterBlock = 0

        cbBlockList = []
        dictBlockList = []
        objUniqueList = []

        condBlockList = []
  Routine welcomeScreen
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    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine restPeriod
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    PolygonComponent crossRest
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent codeRest
      Code Type = Auto->JS
    KeyboardComponent skipRest
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine beginBlock
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  Routine stimVid
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  Routine endStim
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Flow
  LoopInitiator loopLoader loopType="TrialHandler"
    conditionsFile = stimuli_table.xlsx
    loopType = sequential
    nReps = N_rep
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    conditions:
      [{'conditions': 'human', 'side': 'left', 'numbering': 0, 'mappedActions': 'air punching', 'stimDir': './stimuli/human/human_mov_left_0.mp4'},
      {'conditions': 'human', 'side': 'left', 'numbering': 1, 'mappedActions': 'backward-forward arm swing', 'stimDir': './stimuli/human/human_mov_left_1.mp4'},
      {'conditions': 'human', 'side': 'left', 'numbering': 2, 'mappedActions': 'lateral arm swing', 'stimDir': './stimuli/human/human_mov_left_2.mp4'},
      {'conditions': 'human', 'side': 'left', 'numbering': 3, 'mappedActions': 'reach forward', 'stimDir': './stimuli/human/human_mov_left_3.mp4'},
      {'conditions': 'human', 'side': 'left', 'numbering': 4, 'mappedActions': 'read to the side', 'stimDir': './stimuli/human/human_mov_left_4.mp4'},
      {'conditions': 'human', 'side': 'left', 'numbering': 5, 'mappedActions': 'touch face', 'stimDir': './stimuli/human/human_mov_left_5.mp4'},
      {'conditions': 'human', 'side': 'left', 'numbering': 6, 'mappedActions': 'touch head', 'stimDir': './stimuli/human/human_mov_left_6.mp4'},
      {'conditions': 'human', 'side': 'left', 'numbering': 7, 'mappedActions': 'waving', 'stimDir': './stimuli/human/human_mov_left_7.mp4'},
      {'conditions': 'human', 'side': 'right', 'numbering': 0, 'mappedActions': 'air punching', 'stimDir': './stimuli/human/human_mov_right_0.mp4'},
      {'conditions': 'human', 'side': 'right', 'numbering': 1, 'mappedActions': 'backward-forward arm swing', 'stimDir': './stimuli/human/human_mov_right_1.mp4'}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
    Routine stimLoader
  LoopTerminator loopLoader
  Routine stimShuffler
  Routine welcomeScreen
  LoopInitiator loopFuncRun loopType="TrialHandler"
    loopType = random
    nReps = N_block
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    Routine restPeriod
    LoopInitiator loopCountDown loopType="TrialHandler"
      loopType = sequential
      nReps = 4
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      Routine beginBlock
    LoopTerminator loopCountDown
    LoopInitiator loopBlock loopType="TrialHandler"
      loopType = random
      nReps = N_stim
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      Routine stimVid
      Routine endStim
    LoopTerminator loopBlock
  LoopTerminator loopFuncRun
